PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FINAL ASSIGNMENT
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # number the of distractors

        n_distractors = 2
        distractors = []

        for i in range(n_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
                text='JZTXVB',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.05, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-1.0);

            distractors.append(distractor)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # number the of distractors

        n_distractors = 2
        distractors = []

        for i in range(n_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
                text='JDQFJHZ',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.05, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-1.0);

            distractors.append(distractor)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # number the of distractors

        n_distractors = 2
        distractors = []

        for i in range(n_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
                text='MBZJSV',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.05, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-1.0);

            distractors.append(distractor)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # number the of distractors

        n_distractors = 2
        distractors = []

        for i in range(n_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
                text='ZXLSMT',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.05, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-1.0);

            distractors.append(distractor)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # number the of distractors

        n_distractors = 2
        distractors = []

        for i in range(n_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
                text='RZLXMV',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.05, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-1.0);

            distractors.append(distractor)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      correctAns = 'target'
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = True
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = VXRLFH
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine trial
  LoopTerminator trials
